<PlusConfiguration version="2.4">

  <DataCollection StartupDelaySec="1.0">

    <DeviceSet
      Name="TEST: Single Marker Tracking"
      Description="Minimal ArUco tracking test" />

    <!-- VIDEO -->
    <Device
      Id="VideoDevice"
      Type="MmfVideo"
      FrameSize="640 480"
      VideoFormat="YUY2"
      CaptureDeviceId="0">

      <DataSources>
        <DataSource Type="Video" Id="Video" PortUsImageOrientation="MF" ImageType="RGB_COLOR"/>
      </DataSources>

      <OutputChannels>
        <OutputChannel Id="VideoStream" VideoDataSourceId="Video"/>
      </OutputChannels>
    </Device>

    <!-- TRACKER -->
    <Device
      Id="TrackerDevice"
      Type="OpticalMarkerTracker"
      CameraCalibrationFile="OpticalMarkerTracker/camera_calibration.yml"
      ToolReferenceFrame="Tracker"
      TrackingMethod="OPTICAL"
      MarkerDictionary="ARUCO_MIP_36h12">

      <DataSources>
        <DataSource Type="Tool" Id="Marker0" MarkerId="0" MarkerSizeMm="100" />
      </DataSources>

      <InputChannels>
        <InputChannel Id="VideoStream"/>
      </InputChannels>

      <OutputChannels>
        <OutputChannel Id="TrackerStream">
          <DataSource Id="Marker0"/>
        </OutputChannel>
      </OutputChannels>

    </Device>

  </DataCollection>

  <!-- TRANSFORMS -->
  <PlusOpenIGTLinkServer
    ListeningPort="18944"
    OutputChannelId="TrackerStream">

    <DefaultClientInfo>
      <MessageTypes>
        <Message Type="TRANSFORM"/>
      </MessageTypes>
      <TransformNames>
        <Transform Name="Marker0ToTracker"/>
      </TransformNames>
    </DefaultClientInfo>

  </PlusOpenIGTLinkServer>

  <!-- VIDEO -->
  <PlusOpenIGTLinkServer
    ListeningPort="18945"
    OutputChannelId="VideoStream">

    <DefaultClientInfo>
      <MessageTypes>
        <Message Type="IMAGE"/>
      </MessageTypes>
      <ImageNames>
        <Image Name="Image" EmbeddedTransformToFrame="Image"/>
      </ImageNames>
    </DefaultClientInfo>

  </PlusOpenIGTLinkServer>

</PlusConfiguration>